PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = rotationSpan
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine experimentalTrial
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    ImageComponent expTrial_leter
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $'letters/'+sequenceDataset.figName[experimentalBlock.thisN]+'.JPG'
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Letter_timeLimit
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    ButtonComponent expTrial_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      save = first click
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Letter_timeLimit
      text = Continue
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    CodeComponent expTrial_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.exp_figName',            sequenceDataset.figName[experimentalBlock.thisN])
        thisExp.addData('myExp.face_forward',           sequenceDataset.face_forward[experimentalBlock.thisN])
      End Routine:
        # speed error (pure error of taking too long to judge the grid)
        if not expTrial_next.isClicked:
            sequenceDataset.error_speed[experimentalBlock.thisN] = 1
        else:
            sequenceDataset.error_speed[experimentalBlock.thisN] = 0
        thisExp.addData('myExp.error_speed', sequenceDataset.error_speed[experimentalBlock.thisN])
  Routine experimentalResponse
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    TextComponent expResponse_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = This letter is
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    ButtonComponent yes
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-0.35, -0.2)
      save = first click
      size = (0.55, 0.3)
      startVal [time (s)] = 0
      text = Forward-facing
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    ButtonComponent no
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0.35, -0.2)
      save = first click
      size = (0.55, 0.3)
      startVal [time (s)] = 0
      text = Mirror-reversed
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    CodeComponent expResponse_addData
      Code Type = Auto->JS
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      End Routine:
        # accuracy sym (overall accuracy, this will be 0 if participants take too long to respond)
        if sequenceDataset.error_speed[experimentalBlock.thisN] == 0:
            if sequenceDataset.face_forward[experimentalBlock.thisN] == 1:
                sequenceDataset.Accuracy_letter[experimentalBlock.thisN]             = yes.numClicks
            else:
                sequenceDataset.Accuracy_letter[experimentalBlock.thisN]             = no.numClicks
        else:
            sequenceDataset.Accuracy_letter[experimentalBlock.thisN] = 0
        thisExp.addData('myExp.Accuracy_letter',         sequenceDataset.Accuracy_letter[experimentalBlock.thisN])

        # judgement error (pure error from judgement, don't care whether pt take too long to judge the grid)
        if sequenceDataset.face_forward[experimentalBlock.thisN] == 1:
            sequenceDataset.error_letter[experimentalBlock.thisN] = no.numClicks
        else:
            sequenceDataset.error_letter[experimentalBlock.thisN] = yes.numClicks
        thisExp.addData('myExp.error_letter', sequenceDataset.error_letter[experimentalBlock.thisN])
  Routine sequenceGeneration_3
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
        red_number = np.arange(1, 17)  # red square choices from 1 to 16

        # shuffle the choices
        np.random.shuffle(red_number)

        # create variable 'trial'
        trial = np.arange(1, trialAll_num + 1)

        # select the choices from the shuffled numbers
        red_selection = red_number[:trialAll_num]

        # create figure name
        figName = []
        for num in red_selection:
            figName.append('red_square' + str(num))

        # create a DataFrame
        redSquare_Dataset = pd.DataFrame({
            'trial': trial,
            'figName': figName,
            'redSquare_num': red_selection
        })

        redSquare_Dataset
  Routine sequenceGeneration_practFinal3
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    CodeComponent code_16
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]
        red_number = np.arange(1, 17)  # red square choices from 1 to 16

        # shuffle the choices
        np.random.shuffle(red_number)

        # create variable 'trial'
        trial = np.arange(1, trialAll_num + 1)

        # select the choices from the shuffled numbers
        red_selection = red_number[:trialAll_num]

        # create figure name
        figName = []
        for num in red_selection:
            figName.append('red_square' + str(num))

        # create a DataFrame
        redSquare_Dataset_practFinal = pd.DataFrame({
            'trial': trial,
            'figName': figName,
            'redSquare_num': red_selection
        })

        redSquare_Dataset_practFinal
  Routine practiceFinalTrial
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    ImageComponent practFinalTrial_letter
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $'letters/'+sequenceDataset_practFinal.figName[practiceBlock.thisN]+'.JPG'
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Letter_timeLimit
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    ButtonComponent practFinalTrial_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      save = first click
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Letter_timeLimit
      text = Continue
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    CodeComponent practFinalTrial_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPractFinal.trial',            sequenceDataset_practFinal.trial[practiceBlock.thisN])
        thisExp.addData('myPractFinal.pract_figName',            sequenceDataset_practFinal.figName[practiceBlock.thisN])
        thisExp.addData('myPractFinal.face_forward',           sequenceDataset_practFinal.face_forward[practiceBlock.thisN])
      End Routine:
        # speed error (pure error of taking too long to judge the grid)
        if not practFinalTrial_next.isClicked:
            sequenceDataset_practFinal.error_speed[practiceBlock.thisN] = 1
        else:
            sequenceDataset_practFinal.error_speed[practiceBlock.thisN] = 0
        thisExp.addData('myPractFinal.error_speed', sequenceDataset_practFinal.error_speed[practiceBlock.thisN])
  Routine practiceFinalResponse
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    TextComponent practFinalResponse_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = This letter is
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    ButtonComponent practFinalResponse_yes
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-0.35, -0.2)
      save = first click
      size = (0.55, 0.3)
      startVal [time (s)] = 0
      text = Forward-facing
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    ButtonComponent practFinalResponse_no
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0.35, -0.2)
      save = first click
      size = (0.55, 0.3)
      startVal [time (s)] = 0
      text = Mirror-reversed
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    CodeComponent practFinalResponse_addData
      Code Type = Auto->JS
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      End Routine:
        # accuracy sym (overall accuracy, this will be 0 if participants take too long to respond)
        if sequenceDataset_practFinal.error_speed[practiceBlock.thisN] == 0:
            if sequenceDataset_practFinal.face_forward[practiceBlock.thisN] == 1:
                sequenceDataset_practFinal.Accuracy_letter[practiceBlock.thisN]             = practFinalResponse_yes.numClicks
            else:
                sequenceDataset_practFinal.Accuracy_letter[practiceBlock.thisN]             = practFinalResponse_no.numClicks
        else:
            sequenceDataset_practFinal.Accuracy_letter[practiceBlock.thisN] = 0
        thisExp.addData('myPractFinal.Accuracy_sym',         sequenceDataset_practFinal.Accuracy_letter[practiceBlock.thisN])

        # judgement error (pure error from judgement, don't care whether pt take too long to judge the letter)
        if sequenceDataset_practFinal.face_forward[practiceBlock.thisN] == 1:
            sequenceDataset_practFinal.error_letter[practiceBlock.thisN] = practFinalResponse_no.numClicks
        else:
            sequenceDataset_practFinal.error_letter[practiceBlock.thisN] = practFinalResponse_yes.numClicks
        thisExp.addData('myPractFinal.error_letter', sequenceDataset_practFinal.error_letter[practiceBlock.thisN])
  Routine practiceFinalFeedback
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    CodeComponent practFinalFB_code
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np

        # number of arrow trials
        PracticeArrow_allTrials_num = len(sequenceDataset_practFinal.Accuracy_arrow)
        # number of arrow with correct answer
        PracticeArrow_correctTrials_num = np.sum(sequenceDataset_practFinal.Accuracy_arrow)

        # number of letter trials
        PracticeFinalLetter_allTrials_num = len(sequenceDataset_practFinal.Accuracy_letter)
        # number of correct letter trials
        PracticeFinalLetter_correctTrials_num = np.sum(sequenceDataset_practFinal.Accuracy_letter)

        # total speed_error
        PracticeFinalLetter_speedError_num = np.sum(sequenceDataset_practFinal.error_speed)
        # total letter_error
        PracticeFinalLetter_accuracyError_num = np.sum(sequenceDataset_practFinal.error_letter)

        # message for feedback
        msg = "%i of %i correct judgments\n(%i delayed judgments)\n\n%i of %i correct recalls" %(PracticeFinalLetter_correctTrials_num, PracticeFinalLetter_allTrials_num, PracticeFinalLetter_speedError_num, PracticeArrow_correctTrials_num, PracticeArrow_allTrials_num)
    TextComponent practFinalFB_msg
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    ButtonComponent practFinalFB_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Next
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  Routine start
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    ButtonComponent start_button
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = Start
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  Routine instr_practiceFinal1
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    ButtonComponent instFinal_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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    ImageComponent instFinal_image
      color = 1.0000, 1.0000, 1.0000
      image = pt_final1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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  Routine inst_practiceFinal2
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    ImageComponent instFinal_image2
      color = 1.0000, 1.0000, 1.0000
      image = pt_final2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instFinal_next2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine inst_experiment1
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    ButtonComponent instExp_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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    ImageComponent instExp_image
      image = task1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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  Routine inst_experiment2
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    ButtonComponent instExp_next2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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    ImageComponent instExp_image2
      image = task2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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  Routine end
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    ImageComponent endImage
      color = 1.0000, 1.0000, 1.0000
      image = end slide.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent endButton
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Submit
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  Routine practiceArrow
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    ImageComponent practArrow_stimuli
      image [set every repeat] = $'arrows/'+sequenceDataset_practArrow.arrow_figName[practiceArrowBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    CodeComponent practArrow_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPractArrow.trial',            sequenceDataset_practArrow.trial[practiceArrowBlock.thisN])
        thisExp.addData('myPractArrow.arrow_figName',            sequenceDataset_practArrow.arrow_figName[practiceArrowBlock.thisN])
  Routine practiceArrowRecall
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    TextComponent practArrowRecall_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text:
        Please recall the arrows
        in the correct order
    ImageComponent short_0
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_0.jpg
      interpolate = nearest
      pos = (0, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent short_45
      image = arrow_recall/short_45.jpg
      interpolate = nearest
      pos = (0.051, 0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_90
      image = arrow_recall/short_90.jpg
      interpolate = nearest
      pos = (0.075, 0)
      startVal [time (s)] = 0.0
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    ImageComponent short_135
      image = arrow_recall/short_135.jpg
      interpolate = nearest
      pos = (0.051, -0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_180
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_180.jpg
      interpolate = nearest
      pos = (0, -0.13)
      startVal [time (s)] = 0.0
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    ImageComponent short_225
      image = arrow_recall/short_225.jpg
      interpolate = nearest
      pos = (-0.051, -0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_270
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_270.jpg
      interpolate = nearest
      pos = (-0.075, 0)
      startVal [time (s)] = 0.0
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    ImageComponent short_315
      image = arrow_recall/short_315.jpg
      interpolate = nearest
      pos = (-0.051, 0.091)
      startVal [time (s)] = 0.0
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    ImageComponent long_0
      image = arrow_recall/long_0.jpg
      interpolate = nearest
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent long_45
      image = arrow_recall/long_45.jpg
      interpolate = nearest
      pos = (0.16, 0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_90
      image = arrow_recall/long_90.jpg
      interpolate = nearest
      pos = (0.227, 0)
      startVal [time (s)] = 0.0
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    ImageComponent long_135
      image = arrow_recall/long_135.jpg
      interpolate = nearest
      pos = (0.16, -0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_180
      image = arrow_recall/long_180.jpg
      interpolate = nearest
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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    ImageComponent long_225
      image = arrow_recall/long_225.jpg
      interpolate = nearest
      pos = (-0.16, -0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_270
      image = arrow_recall/long_270.jpg
      interpolate = nearest
      pos = (-0.227, 0)
      startVal [time (s)] = 0.0
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    ImageComponent long_315
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/long_315.jpg
      interpolate = nearest
      pos = (-0.16, 0.285)
      startVal [time (s)] = 0.0
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    ButtonComponent practArrowRecall_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.75)
      save = first click
      size = (0.3, 0.2)
      text = Next
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    CodeComponent practArrowRecall_code
      Code Type = Auto->JS
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      Begin Routine:
        practArrowRecall_next.setAutoDraw(False)

        # Variable to keep track of the last clicked button
        last_clicked_button = None

        # copy the red square to this line for future accuracy check
        thisExp.addData('myPractArrow.expectedArrow',           sequenceDataset_practArrow.arrow_figName[practiceArrowRecallBlock.thisN])
      Each Frame:
        buttons = [short_0, short_45, short_90, short_135, short_180, short_225, short_270, short_315, long_0, long_45, long_90, long_135, long_180, long_225, long_270, long_315]

        # check if any button is clicked
        for button in buttons:
            if mouse.isPressedIn(button):
                if last_clicked_button is not None: # if there is previous clicked button
                    last_clicked_button.color = 'white'  # reset the previous button to white

                button.color = 'red'  # set the current clicked button to red
                last_clicked_button = button  # update the last clicked button
                practArrowRecall_next.setAutoDraw(True) # 'next' button pop up
                thisExp.addData('myPractArrow.selected_arrow', last_clicked_button.name)
                sequenceDataset_practArrow.Accuracy[practiceArrowRecallBlock.thisN]             = int(sequenceDataset_practArrow.arrow_figName[practiceArrowRecallBlock.thisN] == last_clicked_button.name)
                thisExp.addData('myPractArrow.Accuracy',      sequenceDataset_practArrow.Accuracy[practiceArrowRecallBlock.thisN])
                break

        if practArrowRecall_next.isClicked:
            for last_clicked_button in buttons:
                last_clicked_button.color = 'white' # reset them all to white after click 'next'
    MouseComponent mouse
      clickable = short_0, short_45, short_90, short_135, short_180, short_225, short_270, short_315, long_0, long_45, long_90, long_135, long_180, long_225, long_270, long_315
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine practiceArrowFeedback
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    CodeComponent practArrowFB_code
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np

        # number of trials
        PracticeAR_allTrials_num = len(sequenceDataset_practArrow.Accuracy)

        # number of trials with correct answer
        PracticeAR_correctTrials_num = np.sum(sequenceDataset_practArrow.Accuracy)


        # message for feedback
        msg = "%i of %i correct recalls" %(PracticeAR_correctTrials_num, PracticeAR_allTrials_num)
    TextComponent practArrowFB_msg
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 1.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = deg
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      text [set every repeat]:
        $msg
  Routine practiceLetter
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    ImageComponent practLetter_stimuli
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $'letters/'+sequenceDataset_practLetter.figName[practiceLetterBlock.thisN]+'.JPG'
      interpolate = nearest
      startVal [time (s)] = 0.0
      units = deg
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    ButtonComponent practLetter_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      text = Continue
      timeRelativeTo = experiment
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    CodeComponent practLetter_code
      Code Type = Auto->JS
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      Begin Routine:
        # add data
        thisExp.addData('myPractLetter.trial',            sequenceDataset_practLetter.trial[practiceLetterBlock.thisN])
        thisExp.addData('myPractLetter.figName',            sequenceDataset_practLetter.figName[practiceLetterBlock.thisN])
        thisExp.addData('myPractLetter.face_forward',           sequenceDataset_practLetter.face_forward[practiceLetterBlock.thisN])

        # initialise the start time variable
        practLetter_next_startTime = None  # Will be set when the button is drawn
      Each Frame:
        # check if the button is being drawn for the first time
        if practLetter_next_startTime is None and practLetter_next.status == STARTED:
            practLetter_next_startTime = core.getTime()  # get the time when the button first appears
            thisExp.addData('practLetter_next.started', practLetter_next_startTime)  # add the start time

        # check if the button is clicked
        if practLetter_next.isClicked:
            if not practLetter_next.timesOn:  # if the list is empty
                practLetter_next.timesOn.append(core.getTime())  # manually store the press time
            button_press_time = practLetter_next.timesOn[-1]
            # save the button press time and calculate the duration
            thisExp.addData('practLetter_next.pressed', button_press_time)

            # calculate duration
            sequenceDataset_practLetter.trialDuration[practiceLetterBlock.thisN] = button_press_time - practLetter_next_startTime
            thisExp.addData('myPractLetter.trialDuration', sequenceDataset_practLetter.trialDuration[practiceLetterBlock.thisN])
  Routine practiceLetterResponse
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    TextComponent practLetterResponse_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = This letter is
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    ButtonComponent practLetterResponse_yes
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-0.35, -0.2)
      save = first click
      size = (0.55, 0.3)
      startVal [time (s)] = 0
      text = Forward-facing
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    ButtonComponent practLetterResponse_no
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0.35, -0.2)
      save = first click
      size = (0.55, 0.3)
      startVal [time (s)] = 0
      text = Mirror-reversed
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    CodeComponent practLetterResponse_code
      Code Type = Auto->JS
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      End Routine:
        import numpy as np

        # Accuracy
        if practLetterResponse_yes.isClicked or practLetterResponse_no.isClicked:
            if sequenceDataset_practLetter.face_forward[practiceLetterBlock.thisN] == 1:
                sequenceDataset_practLetter.Accuracy[practiceLetterBlock.thisN]             = int(practLetterResponse_yes.isClicked)
            else:
                sequenceDataset_practLetter.Accuracy[practiceLetterBlock.thisN]             = int(practLetterResponse_no.isClicked)
        thisExp.addData('myPractLetter.Accuracy',            sequenceDataset_practLetter.Accuracy[practiceLetterBlock.thisN])
  Routine practiceLetterFeedback
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    CodeComponent practLetterFB_code
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if sequenceDataset_practLetter.Accuracy[practiceLetterBlock.thisN] == 1:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent practLetterFB_msg
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent practLetterFB_sound
      forceEndRoutine = False
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceFinalRecall
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    TextComponent practFinalRecall_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text:
        Please recall the arrows
        in the correct order
    ImageComponent short_0_final
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_0.jpg
      interpolate = nearest
      pos = (0, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent short_45_final
      image = arrow_recall/short_45.jpg
      interpolate = nearest
      pos = (0.051, 0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_90_final
      image = arrow_recall/short_90.jpg
      interpolate = nearest
      pos = (0.075, 0)
      startVal [time (s)] = 0.0
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    ImageComponent short_135_final
      image = arrow_recall/short_135.jpg
      interpolate = nearest
      pos = (0.051, -0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_180_final
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_180.jpg
      interpolate = nearest
      pos = (0, -0.13)
      startVal [time (s)] = 0.0
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    ImageComponent short_225_final
      image = arrow_recall/short_225.jpg
      interpolate = nearest
      pos = (-0.051, -0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_270_final
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_270.jpg
      interpolate = nearest
      pos = (-0.075, 0)
      startVal [time (s)] = 0.0
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    ImageComponent short_315_final
      image = arrow_recall/short_315.jpg
      interpolate = nearest
      pos = (-0.051, 0.091)
      startVal [time (s)] = 0.0
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    ImageComponent long_0_final
      image = arrow_recall/long_0.jpg
      interpolate = nearest
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent long_45_final
      image = arrow_recall/long_45.jpg
      interpolate = nearest
      pos = (0.16, 0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_90_final
      image = arrow_recall/long_90.jpg
      interpolate = nearest
      pos = (0.227, 0)
      startVal [time (s)] = 0.0
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    ImageComponent long_135_final
      image = arrow_recall/long_135.jpg
      interpolate = nearest
      pos = (0.16, -0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_180_final
      image = arrow_recall/long_180.jpg
      interpolate = nearest
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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    ImageComponent long_225_final
      image = arrow_recall/long_225.jpg
      interpolate = nearest
      pos = (-0.16, -0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_270_final
      image = arrow_recall/long_270.jpg
      interpolate = nearest
      pos = (-0.227, 0)
      startVal [time (s)] = 0.0
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    ImageComponent long_315_final
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/long_315.jpg
      interpolate = nearest
      pos = (-0.16, 0.285)
      startVal [time (s)] = 0.0
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    ButtonComponent practFinalRecall_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.75)
      save = first click
      size = (0.3, 0.2)
      text = Next
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    CodeComponent practFinalRecall_code
      Code Type = Auto->JS
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      Begin Routine:
        practFinalRecall_next.setAutoDraw(False)

        # Variable to keep track of the last clicked button
        last_clicked_button = None

        # copy the arrow name to this line for future accuracy check
        thisExp.addData('myPractFinal.expectedArrow',           sequenceDataset_practFinal.arrow_figName[practiceRecallBlock.thisN])
      Each Frame:
        buttons = [short_0_final, short_45_final, short_90_final, short_135_final, short_180_final, short_225_final, short_270_final, short_315_final, long_0_final, long_45_final, long_90_final, long_135_final, long_180_final, long_225_final, long_270_final, long_315_final]

        # check if any button is clicked
        for button in buttons:
            if mouse_3.isPressedIn(button):
                if last_clicked_button is not None: # if there is previous clicked button
                    last_clicked_button.color = 'white'  # reset the previous button to white

                button.color = 'red'  # set the current clicked button to red
                last_clicked_button = button  # update the last clicked button
                practFinalRecall_next.setAutoDraw(True) # 'next' button pop up

                last_clicked_button_name = "_".join(last_clicked_button.name.split("_")[:2])
                thisExp.addData('myPractFinal.selected_arrow', last_clicked_button_name)
                sequenceDataset_practFinal.Accuracy_arrow[practiceRecallBlock.thisN]             = int(sequenceDataset_practFinal.arrow_figName[practiceRecallBlock.thisN] == last_clicked_button_name)
                thisExp.addData('myPractFinal.Accuracy_arrow',      sequenceDataset_practFinal.Accuracy_arrow[practiceRecallBlock.thisN])
                break

        if practFinalRecall_next.isClicked:
            for last_clicked_button in buttons:
                last_clicked_button.color = 'white' # reset them all to white after click 'next'
    MouseComponent mouse_3
      clickable = short_0_final, short_45_final, short_90_final, short_135_final, short_180_final, short_225_final, short_270_final, short_315_final, long_0_final, long_45_final, long_90_final, long_135_final, long_180_final, long_225_final, long_270_final, long_315_final
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine experimentalRecall
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    TextComponent expRecall_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
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      text:
        Please recall the arrows
        in the correct order
    ImageComponent short_0_final_2
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_0.jpg
      interpolate = nearest
      pos = (0, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent short_45_final_2
      image = arrow_recall/short_45.jpg
      interpolate = nearest
      pos = (0.051, 0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_90_final_2
      image = arrow_recall/short_90.jpg
      interpolate = nearest
      pos = (0.075, 0)
      startVal [time (s)] = 0.0
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    ImageComponent short_135_final_2
      image = arrow_recall/short_135.jpg
      interpolate = nearest
      pos = (0.051, -0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_180_final_2
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_180.jpg
      interpolate = nearest
      pos = (0, -0.13)
      startVal [time (s)] = 0.0
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    ImageComponent short_225_final_2
      image = arrow_recall/short_225.jpg
      interpolate = nearest
      pos = (-0.051, -0.091)
      startVal [time (s)] = 0.0
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    ImageComponent short_270_final_2
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/short_270.jpg
      interpolate = nearest
      pos = (-0.075, 0)
      startVal [time (s)] = 0.0
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    ImageComponent short_315_final_2
      image = arrow_recall/short_315.jpg
      interpolate = nearest
      pos = (-0.051, 0.091)
      startVal [time (s)] = 0.0
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    ImageComponent long_0_final_2
      image = arrow_recall/long_0.jpg
      interpolate = nearest
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent long_45_final_2
      image = arrow_recall/long_45.jpg
      interpolate = nearest
      pos = (0.16, 0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_90_final_2
      image = arrow_recall/long_90.jpg
      interpolate = nearest
      pos = (0.227, 0)
      startVal [time (s)] = 0.0
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    ImageComponent long_135_final_2
      image = arrow_recall/long_135.jpg
      interpolate = nearest
      pos = (0.16, -0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_180_final_2
      image = arrow_recall/long_180.jpg
      interpolate = nearest
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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    ImageComponent long_225_final_2
      image = arrow_recall/long_225.jpg
      interpolate = nearest
      pos = (-0.16, -0.285)
      startVal [time (s)] = 0.0
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    ImageComponent long_270_final_2
      image = arrow_recall/long_270.jpg
      interpolate = nearest
      pos = (-0.227, 0)
      startVal [time (s)] = 0.0
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    ImageComponent long_315_final_2
      color = 1.0000, 1.0000, 1.0000
      image = arrow_recall/long_315.jpg
      interpolate = nearest
      pos = (-0.16, 0.285)
      startVal [time (s)] = 0.0
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    ButtonComponent expRecall_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.75)
      save = first click
      size = (0.3, 0.2)
      text = Next
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    CodeComponent expRecall_code
      Code Type = Auto->JS
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      Begin Routine:
        expRecall_next.setAutoDraw(False)

        # Variable to keep track of the last clicked button
        last_clicked_button = None

        # copy the arrow name to this line for future accuracy check
        thisExp.addData('myExp.expectedArrow',           sequenceDataset.arrow_figName[experimentalRecallBlock.thisN])


        # number of sym trials
        ExpLetter_allTrials_num = len(sequenceDataset.Accuracy_letter)
        # number of correct sym trials
        ExpLetter_correctTrials_num = np.sum(sequenceDataset.Accuracy_letter)
        # percentage of correct sym trials
        ExpLetter_correctTrials_pct = 100 * ExpLetter_correctTrials_num/ExpLetter_allTrials_num
        # total speed_error
        ExpLetter_speedError_num = np.sum(sequenceDataset.error_speed)
        #total sym_error
        ExpLetter_accuracyError_num = np.sum(sequenceDataset.error_letter)

        # message for feedback
        msg = "%.2f%% correct judgments" %(ExpLetter_correctTrials_pct)

        # color of feedback
        if ExpLetter_correctTrials_pct>=85:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      Each Frame:
        buttons = [short_0_final_2, short_45_final_2, short_90_final_2, short_135_final_2, short_180_final_2, short_225_final_2, short_270_final_2, short_315_final_2, long_0_final_2, long_45_final_2, long_90_final_2, long_135_final_2, long_180_final_2, long_225_final_2, long_270_final_2, long_315_final_2]

        # check if any button is clicked
        for button in buttons:
            if mouse_4.isPressedIn(button):
                if last_clicked_button is not None: # if there is previous clicked button
                    last_clicked_button.color = 'white'  # reset the previous button to white

                button.color = 'red'  # set the current clicked button to red
                last_clicked_button = button  # update the last clicked button
                expRecall_next.setAutoDraw(True) # 'next' button pop up

                last_clicked_button_name = "_".join(last_clicked_button.name.split("_")[:2])
                thisExp.addData('myExp.selected_arrow', last_clicked_button_name)
                sequenceDataset.Accuracy_arrow[experimentalRecallBlock.thisN]             = int(sequenceDataset.arrow_figName[experimentalRecallBlock.thisN] == last_clicked_button_name)
                thisExp.addData('myExp.Accuracy_arrow',      sequenceDataset.Accuracy_arrow[experimentalRecallBlock.thisN])
                break

        if expRecall_next.isClicked:
            for last_clicked_button in buttons:
                last_clicked_button.color = 'white' # reset them all to white after click 'next'
    MouseComponent mouse_4
      clickable = short_0_final_2, short_45_final_2, short_90_final_2, short_135_final_2, short_180_final_2, short_225_final_2, short_270_final_2, short_315_final_2, long_0_final_2, long_45_final_2, long_90_final_2, long_135_final_2, long_180_final_2, long_225_final_2, long_270_final_2, long_315_final_2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent expRecall_msg
      color [set every repeat] = $fb_col
      letterHeight = 0.08
      pos = (0.7, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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  Routine practiceFinalArrow
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    ImageComponent practFinal_arrow
      image [set every repeat] = $'arrows/'+sequenceDataset_practFinal.arrow_figName[practiceBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    CodeComponent practFinalArrow_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPractFinal.arrow_figName',            sequenceDataset_practFinal.arrow_figName[practiceBlock.thisN])
  Routine instr_practiceArrow1
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    ImageComponent instArrow_image
      color = 1.0000, 1.0000, 1.0000
      image = pt_arrow1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instArrow_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine instr_practiceArrow2
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    ImageComponent instArrow_image2
      color = 1.0000, 1.0000, 1.0000
      image = pt_arrow2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instArrow_next2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine instr_practiceLetter1
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    ImageComponent instLetter_image
      color = 1.0000, 1.0000, 1.0000
      image = pt_letter1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instLetter_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine instr_practiceLetter2
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    ImageComponent instLetter_image2
      image = pt_letter2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instLetter_next2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine inst_practiceFinal3
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    ImageComponent instFinal_image3
      color = 1.0000, 1.0000, 1.0000
      image = pt_final3.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instFinal_next3
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine inst_experiment3
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    ButtonComponent instExp_next3
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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    ImageComponent instExp_image3
      image = task3.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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  Routine practiceLetterBlock_feedback
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    CodeComponent practLetterFbBlock_code
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np

        # duration of practiceSymTrial
        avgPracticeLetter_trialDuration = np.mean(sequenceDataset_practLetter.trialDuration)
        stdPracticeLetter_trialDuration = np.std(sequenceDataset_practLetter.trialDuration)

        # time limit for sym trial
        Letter_timeLimit = avgPracticeLetter_trialDuration + (2.5 * stdPracticeLetter_trialDuration)

        # number of trials
        PracticeLetter_allTrials_num = len(sequenceDataset_practLetter.Accuracy)

        # number of trials with correct answer
        PracticeLetter_correctTrials_num = np.sum(sequenceDataset_practLetter.Accuracy)

        # percentage of trials with correct answer
        PracticeLetter_correctTrials_pct= 100*PracticeLetter_correctTrials_num/ PracticeLetter_allTrials_num


        # message for feedback
        if PracticeLetter_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \n average RT = %.2f s " %(PracticeLetter_correctTrials_num, PracticeLetter_allTrials_num, PracticeLetter_correctTrials_pct, avgPracticeLetter_trialDuration)
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(PracticeLetter_correctTrials_num, PracticeLetter_allTrials_num, PracticeLetter_correctTrials_pct)


        # color of feedback
        if PracticeLetter_correctTrials_pct>=85:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if PracticeLetter_correctTrials_pct >= 85:
            practiceLetterBlockCutOff.finished = True
    TextComponent practLetterFbBlock_msg
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    ButtonComponent practLetterFbBlock_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Next
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    TextComponent practLetterFbBlock_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If your accuracy was less than 85% you will repeat the practice block.
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  Routine experimentalArrow
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    ImageComponent exp_arrow
      image [set every repeat] = $'arrows/'+sequenceDataset.arrow_figName[experimentalBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    CodeComponent expArrow_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myExp.arrow_figName',            sequenceDataset.arrow_figName[experimentalBlock.thisN])
  Routine start_task
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    PolygonComponent polygon
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Start
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    MouseComponent mouse_2
      clickable = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine start_bar
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practArrowSequenceGeneration
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    CodeComponent practArrow_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import numpy as np
        import pandas as pd

        # define and shuffle the set-size
        setSizes_pool = [2, 2, 3]
        random.shuffle(setSizes_pool)

        # count the total number of set-size
        setSizes_num = len(setSizes_pool)

        # create block number column
        setSizes_block_num = np.arange(1, setSizes_num + 1)

        # create a DataFrame from the shuffled pool
        setSizes_practArrow = pd.DataFrame({
            'setSizes_block_num': setSizes_block_num,
            'current_setSize': setSizes_pool

        })

        setSizes_practArrow
  Routine practArrowSequenceGeneration2
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    CodeComponent practArrow_sequenceGeneration2
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_practArrow.current_setSize[AllPracticeArrowBlocks.thisN]
        rotation = [0, 45, 90, 135, 180, 225, 270, 315]
        arrow = ["short", "long"]

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        # create variables 'arrow_figName'
        arrow_figName = np.empty(trialAll_num, dtype="<U10")

        # create all possible arrow names
        all_arrow_names = [f"{a}_{r}" for a in arrow for r in rotation]

        # shuffle all possible name and use the first-trialAll_num index
        np.random.shuffle(all_arrow_names)
        arrow_figName = all_arrow_names[:trialAll_num]

        # create a DataFrame for the sequence dataset
        sequenceDataset_practArrow = pd.DataFrame({
            'trial': trial,
            'arrow_figName': arrow_figName,
            'expectedArrow': np.nan,
            'observedResponse': np.nan,
            'Accuracy': np.nan,
            'trialDuration': np.nan
        })

        sequenceDataset_practArrow
  Routine practLetterSequenceGeneration
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    CodeComponent practLetter_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = 15  # number of trials (must be even)
        letter = ["F", "G", "J", "R"]
        category = ["ff", "mr"]
        rotation = [0, 45, 90, 135, 180, 225, 270, 315]

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        # create variables 'figName and face_forward'
        figName = np.empty(trialAll_num, dtype="<U10")
        face_forward = np.empty(trialAll_num, dtype=int)

        # create all possible figure and arrow names
        all_fig_names = [f"{l}_{r}_{c}" for l in letter for r in rotation for c in category]

        # create a while loop to run until conditions are met
        while True:
            # shuffle the possible figure names
            np.random.shuffle(all_fig_names)

            # used the first-trialAll_num index from the list
            used_fig_names = all_fig_names[:trialAll_num]

            for trialIdx in range(trialAll_num):
                figName[trialIdx] = used_fig_names[trialIdx]
                face_forward[trialIdx] = 1 if "ff" in figName[trialIdx] else 0

            # create variables to calculate face forward/mirror reversed figure proportions
            ff_proportion = np.sum(face_forward == 1) / trialAll_num
            mr_proportion = np.sum(face_forward == 0) / trialAll_num

            # check if both proportions are at least 30%
            if ff_proportion >= 0.40 and mr_proportion >= 0.40:
                break  # exit the loop when the condition are met

        # create a DataFrame for the sequence dataset
        sequenceDataset_practLetter = pd.DataFrame({
            'trial': trial,
            'face_forward': face_forward,
            'figName': figName,
            'expectedResponse': np.nan,
            'observedResponse': np.nan,
            'Accuracy': np.nan,
            'trialDuration': np.nan
        })

        sequenceDataset_practLetter
  Routine practFinalSequenceGeneration2
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    CodeComponent practFinal_sequenceGeneration2
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('PractSetUp.setSizes_block_num',           setSizes_practFinal.setSizes_block_num[AllPracticeBlocks.thisN])
        thisExp.addData('PractSetUp.current_setSize',            setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN])
      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]  # number of trials (must be even)
        letter = ["F", "G", "J", "R"]
        category = ["ff", "mr"]
        rotation = [0, 45, 90, 135, 180, 225, 270, 315]
        arrow = ["short", "long"]

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        figName = np.empty(trialAll_num, dtype="<U10")
        face_forward = np.empty(trialAll_num, dtype=int)
        arrow_figName = np.empty(trialAll_num, dtype="<U10")

        # create all possible figure and arrow names
        all_fig_names = [f"{l}_{r}_{c}" for l in letter for r in rotation for c in category]
        all_arrow_names = [f"{a}_{r}" for a in arrow for r in rotation]


        # create a while loop to run until conditions are met
        while True:
            # shuffle the possible figure and arrow names
            np.random.shuffle(all_fig_names)
            np.random.shuffle(all_arrow_names)

            # used the first-trialAll_num index from each list
            used_fig_names = all_fig_names[:trialAll_num]
            used_arrow_names = all_arrow_names[:trialAll_num]

            for trialIdx in range(trialAll_num):
                figName[trialIdx] = used_fig_names[trialIdx]
                face_forward[trialIdx] = 1 if "ff" in figName[trialIdx] else 0
                arrow_figName[trialIdx] = used_arrow_names[trialIdx]

            # create variables to calculate face forward/mirror reversed figure proportions
            ff_proportion = np.sum(face_forward == 1) / trialAll_num
            mr_proportion = np.sum(face_forward == 0) / trialAll_num

            # check if both proportions are at least 30%
            if ff_proportion >= 0.30 and mr_proportion >= 0.30:
                break  # exit the loop when the condition are met

        # create a DataFrame for the sequence dataset
        sequenceDataset_practFinal = pd.DataFrame({
            'trial': trial,
            'face_forward': face_forward,
            'figName': figName,
            'arrow_figName': arrow_figName,
            'expectedArrow': np.nan,
            'observedResponse': np.nan,
            'Accuracy_letter': np.nan,
            'Accuracy_arrow': np.nan,
            'error_letter': np.nan,
            'error_speed': np.nan,
            'trialDuration': np.nan
        })

        sequenceDataset_practFinal
  Routine expSequenceGeneration
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    CodeComponent exp_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import numpy as np
        import pandas as pd

        # define and shuffle the set-size
        setSizes_pool = [2, 3, 4, 5]
        random.shuffle(setSizes_pool)

        # count the total number of set-size
        setSizes_num = len(setSizes_pool)

        # create block number column
        setSizes_block_num = np.arange(1, setSizes_num + 1)

        # create a DataFrame from the shuffled pool
        setSizes_data = pd.DataFrame({
            'setSizes_block_num': setSizes_block_num,
            'current_setSize': setSizes_pool

        })

        setSizes_data
  Routine expSequenceGeneration2
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    CodeComponent exp_sequenceGeneration2
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('ExpSetUp.setSizes_block_num',           setSizes_data.setSizes_block_num[AllExperimentalBlocks.thisN])
        thisExp.addData('ExpSetUp.current_setSize',            setSizes_data.current_setSize[AllExperimentalBlocks.thisN])
      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
        letter = ["F", "G", "J", "R"]
        category = ["ff", "mr"]
        rotation = [0, 45, 90, 135, 180, 225, 270, 315]
        arrow = ["short", "long"]

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        figName = np.empty(trialAll_num, dtype="<U10")
        face_forward = np.empty(trialAll_num, dtype=int)
        arrow_figName = np.empty(trialAll_num, dtype="<U10")

        # create all possible figure and arrow names
        all_fig_names = [f"{l}_{r}_{c}" for l in letter for r in rotation for c in category]
        all_arrow_names = [f"{a}_{r}" for a in arrow for r in rotation]

        # create a while loop to run until conditions are met
        while True:
            # shuffle the possible figure and arrow names
            np.random.shuffle(all_fig_names)
            np.random.shuffle(all_arrow_names)

            # used the first-trialAll_num index from each list
            used_fig_names = all_fig_names[:trialAll_num]
            used_arrow_names = all_arrow_names[:trialAll_num]

            for trialIdx in range(trialAll_num):
                figName[trialIdx] = used_fig_names[trialIdx]
                face_forward[trialIdx] = 1 if "ff" in figName[trialIdx] else 0
                arrow_figName[trialIdx] = used_arrow_names[trialIdx]

            # create variables to calculate face forward/mirror reversed figure proportions
            ff_proportion = np.sum(face_forward == 1) / trialAll_num
            mr_proportion = np.sum(face_forward == 0) / trialAll_num

            # check if both proportions are at least 30%
            if ff_proportion >= 0.30 and mr_proportion >= 0.30:
                break  # exit the loop when the condition are met

        # create a DataFrame for the sequence dataset
        sequenceDataset = pd.DataFrame({
            'trial': trial,
            'face_forward': face_forward,
            'figName': figName,
            'arrow_figName': arrow_figName,
            'expectedArrow': np.nan,
            'observedResponse': np.nan,
            'Accuracy_letter': np.nan,
            'Accuracy_arrow': np.nan,
            'error_letter': np.nan,
            'error_speed': np.nan,
            'trialDuration': np.nan
        })

        sequenceDataset
  Routine practFinalSequenceGeneration
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    CodeComponent practFinal_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import numpy as np
        import pandas as pd

        # define and shuffle the set-size
        setSizes_pool = [2, 2, 3]
        random.shuffle(setSizes_pool)

        # count the total number of set-size
        setSizes_num = len(setSizes_pool)

        # create block number column
        setSizes_block_num = np.arange(1, setSizes_num + 1)

        # create a DataFrame from the shuffled pool
        setSizes_practFinal = pd.DataFrame({
            'setSizes_block_num': setSizes_block_num,
            'current_setSize': setSizes_pool

        })

        setSizes_practFinal
Flow
  Routine instr_practiceArrow1
  Routine instr_practiceArrow2
  Routine practArrowSequenceGeneration
  LoopInitiator AllPracticeArrowBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = len(setSizes_practArrow)
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    Routine start
    Routine practArrowSequenceGeneration2
    LoopInitiator practiceArrowBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practArrow.current_setSize[AllPracticeArrowBlocks.thisN]
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      Routine practiceArrow
    LoopTerminator practiceArrowBlock
    LoopInitiator practiceArrowRecallBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practArrow.current_setSize[AllPracticeArrowBlocks.thisN]
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      Routine practiceArrowRecall
    LoopTerminator practiceArrowRecallBlock
    Routine practiceArrowFeedback
  LoopTerminator AllPracticeArrowBlocks
  LoopInitiator practiceLetterBlockCutOff loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine instr_practiceLetter1
    Routine instr_practiceLetter2
    Routine start
    Routine practLetterSequenceGeneration
    LoopInitiator practiceLetterBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset_practLetter)
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      Routine practiceLetter
      Routine practiceLetterResponse
      Routine practiceLetterFeedback
    LoopTerminator practiceLetterBlock
    Routine practiceLetterBlock_feedback
  LoopTerminator practiceLetterBlockCutOff
  Routine instr_practiceFinal1
  Routine inst_practiceFinal2
  Routine inst_practiceFinal3
  Routine practFinalSequenceGeneration
  LoopInitiator AllPracticeBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = len(setSizes_practFinal)
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    Routine start
    Routine practFinalSequenceGeneration2
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]
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      Routine practiceFinalTrial
      Routine practiceFinalResponse
      Routine practiceFinalArrow
    LoopTerminator practiceBlock
    LoopInitiator practiceRecallBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]
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      Routine practiceFinalRecall
    LoopTerminator practiceRecallBlock
    Routine practiceFinalFeedback
  LoopTerminator AllPracticeBlocks
  Routine inst_experiment1
  Routine inst_experiment2
  Routine inst_experiment3
  LoopInitiator ThreeBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine expSequenceGeneration
    LoopInitiator AllExperimentalBlocks loopType="TrialHandler"
      loopType = sequential
      nReps = len(setSizes_data)
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      Routine start
      Routine expSequenceGeneration2
      LoopInitiator experimentalBlock loopType="TrialHandler"
        loopType = sequential
        nReps = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
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        Routine experimentalTrial
        Routine experimentalResponse
        Routine experimentalArrow
      LoopTerminator experimentalBlock
      LoopInitiator experimentalRecallBlock loopType="TrialHandler"
        loopType = sequential
        nReps = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
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        Routine experimentalRecall
      LoopTerminator experimentalRecallBlock
    LoopTerminator AllExperimentalBlocks
  LoopTerminator ThreeBlocks
  Routine end
