PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = symmetrySpan
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine experimentalTrial
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    ImageComponent expTrial_grid
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $'exp/'+sequenceDataset.exp_figName[experimentalBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Sym_timeLimit
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    ButtonComponent expTrial_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      save = first click
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Sym_timeLimit
      text = Continue
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    CodeComponent expTrial_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.exp_figName',            sequenceDataset.exp_figName[experimentalBlock.thisN])
        thisExp.addData('myExp.symmetry',           sequenceDataset.symmetry[experimentalBlock.thisN])
      End Routine:
        # speed error (pure error of taking too long to judge the grid)
        if not expTrial_next.isClicked:
            sequenceDataset.error_speed[experimentalBlock.thisN] = 1
        else:
            sequenceDataset.error_speed[experimentalBlock.thisN] = 0
        thisExp.addData('myExp.error_speed', sequenceDataset.error_speed[experimentalBlock.thisN])
  Routine experimentalResponse
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    TextComponent expResponse_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Is this symmetrical?
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    ButtonComponent yes
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-0.3, -0.2)
      save = first click
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = Yes
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    ButtonComponent no
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0.3, -0.2)
      save = first click
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = No
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    CodeComponent expResponse_addData
      Code Type = Auto->JS
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      End Routine:
        # accuracy sym (overall accuracy, this will be 0 if participants take too long to respond)
        if sequenceDataset.error_speed[experimentalBlock.thisN] == 0:
            if sequenceDataset.symmetry[experimentalBlock.thisN] == 1:
                sequenceDataset.Accuracy_sym[experimentalBlock.thisN]             = yes.numClicks
            else:
                sequenceDataset.Accuracy_sym[experimentalBlock.thisN]             = no.numClicks
        else:
            sequenceDataset.Accuracy_sym[experimentalBlock.thisN] = 0
        thisExp.addData('myExp.Accuracy_sym',         sequenceDataset.Accuracy_sym[experimentalBlock.thisN])

        # judgement error (pure error from judgement, don't care whether pt take too long to judge the grid)
        if sequenceDataset.symmetry[experimentalBlock.thisN] == 1:
            sequenceDataset.error_sym[experimentalBlock.thisN]                   = no.numClicks
        else:
            sequenceDataset.error_sym[experimentalBlock.thisN]                   = yes.numClicks
        thisExp.addData('myExp.error_sym', sequenceDataset.error_sym[experimentalBlock.thisN])
  Routine experimentalRedSquare
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    ImageComponent exp_square
      image [set every repeat] = $'red_square/'+sequenceDataset.red_square_figName[experimentalBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
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    CodeComponent expSquare_stimuli
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myExp.redSquare_figName',            sequenceDataset.red_square_figName[experimentalBlock.thisN])
        thisExp.addData('myExp.redSquare_num',           sequenceDataset.redSquare_num[experimentalBlock.thisN])
  Routine sequenceGeneration_3
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
        red_number = np.arange(1, 17)  # red square choices from 1 to 16

        # shuffle the choices
        np.random.shuffle(red_number)

        # create variable 'trial'
        trial = np.arange(1, trialAll_num + 1)

        # select the choices from the shuffled numbers
        red_selection = red_number[:trialAll_num]

        # create figure name
        figName = []
        for num in red_selection:
            figName.append('red_square' + str(num))

        # create a DataFrame
        redSquare_Dataset = pd.DataFrame({
            'trial': trial,
            'figName': figName,
            'redSquare_num': red_selection
        })

        redSquare_Dataset
  Routine experimentalRecall
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    TextComponent expRecall_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = Please recall the locations of the red squares in the correct order
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    ButtonComponent button1
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05, 0.25)
      size = (0.1, 0.15)
      startVal [time (s)] = 0
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    ButtonComponent button3
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button4
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button5
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15, 0.1)
      size = (0.1, 0.15)
      startVal [time (s)] = 0
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    ButtonComponent button6
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button7
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button8
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button9
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button10
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button11
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button12
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button13
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button14
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button15
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button16
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,-0.20)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent expRecall_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.6)
      size = (0.3, 0.2)
      text = Next
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    CodeComponent expRecall_code
      Code Type = Auto->JS
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      Begin Routine:
        expRecall_next.setAutoDraw(False)

        # set a variable to keep track of the last clicked button
        last_clicked_button = None

        buttons = [button1, button2, button3, button4, button5, button6,
                   button7, button8, button9, button10, button11, button12,
                   button13, button14, button15, button16]

        # copy the red square to this line for future accuracy check
        thisExp.addData('myExp.expectedRedSquare_num',           sequenceDataset.redSquare_num[experimentalRecallBlock.thisN])


        # number of sym trials
        ExpSym_allTrials_num = len(sequenceDataset.Accuracy_sym)
        # number of correct sym trials
        ExpSym_correctTrials_num = np.sum(sequenceDataset.Accuracy_sym)
        # percentage of correct sym trials
        ExpSym_correctTrials_pct = 100 * ExpSym_correctTrials_num/ExpSym_allTrials_num
        # total speed_error
        ExpSym_speedError_num = np.sum(sequenceDataset.error_speed)
        #total sym_error
        ExpSym_accuracyError_num = np.sum(sequenceDataset.error_sym)

        # message for feedback
        msg = "%.2f%% correct judgments" %(ExpSym_correctTrials_pct)

        # color of feedback
        if ExpSym_correctTrials_pct>=85:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      Each Frame:
        # deal with button color after click, and 'next' button
        for button in buttons:
            if button.isClicked:  # when a button is clicked
                if last_clicked_button is not None:  # if that button was already clicked before
                    last_clicked_button.fillColor = 'white'  # reset the previous clicked button to white
                button.fillColor = 'red'  # this current button now turn to red
                last_clicked_button = button  # store last clicked button
                expRecall_next.setAutoDraw(True) # 'next' button pop up

                # set a variable to store the selected red square number and accuracy
                button_number = int(last_clicked_button.name.split('button')[1].split('_')[0])
                thisExp.addData('myExp.selected_button', button_number)
                sequenceDataset.Accuracy_red[experimentalRecallBlock.thisN]             = int(sequenceDataset.redSquare_num[experimentalRecallBlock.thisN] == button_number)
                thisExp.addData('myExp.Accuracy_red',      sequenceDataset.Accuracy_red[experimentalRecallBlock.thisN])
                break

        if expRecall_next.isClicked:
            for last_clicked_button in buttons:
                last_clicked_button.fillColor = 'white' # reset them all to white after click 'next'
    TextComponent expRecall_msg
      color [set every repeat] = $fb_col
      letterHeight = 0.08
      pos = (0.7, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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  Routine sequenceGeneration_pract1
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  Routine practiceSymResponse
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    TextComponent practSymResponse_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Is this symmetrical?
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    ButtonComponent practSymResponse_yes
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-0.3, -0.2)
      save = first click
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = Yes
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    ButtonComponent practSymResponse_no
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0.3, -0.2)
      save = first click
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = No
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    CodeComponent practSymResponse_code
      Code Type = Auto->JS
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      End Routine:
        import numpy as np

        # Accuracy
        if practSymResponse_yes.isClicked or practSymResponse_no.isClicked:
            if sequenceDataset_practSym.symmetry[practiceSymBlock.thisN] == 1:
                sequenceDataset_practSym.Accuracy[practiceSymBlock.thisN]             = int(practSymResponse_yes.isClicked)
            else:
                sequenceDataset_practSym.Accuracy[practiceSymBlock.thisN]             = int(practSymResponse_no.isClicked)
        thisExp.addData('myPractSym.Accuracy',            sequenceDataset_practSym.Accuracy[practiceSymBlock.thisN])
  Routine practiceSym
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    ImageComponent practSym_stimuli
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $'pract/'+sequenceDataset_practSym.figName[practiceSymBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.0
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    ButtonComponent practSym_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      text = Continue
      timeRelativeTo = experiment
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    CodeComponent practSym_code
      Code Type = Auto->JS
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      Begin Routine:
        # add data
        thisExp.addData('myPractSym.trial',            sequenceDataset_practSym.trial[practiceSymBlock.thisN])
        thisExp.addData('myPractSym.figName',            sequenceDataset_practSym.figName[practiceSymBlock.thisN])
        thisExp.addData('myPractSym.symmetry',           sequenceDataset_practSym.symmetry[practiceSymBlock.thisN])

        # initialise the start time variable
        practSym_next_startTime = None  # Will be set when the button is drawn
      Each Frame:
        # check if the button is being drawn for the first time
        if practSym_next_startTime is None and practSym_next.status == STARTED:
            practSym_next_startTime = core.getTime()  # get the time when the button first appears
            thisExp.addData('practSym_next.started', practSym_next_startTime)  # add the start time

        # check if the button is clicked
        if practSym_next.isClicked:
            if not practSym_next.timesOn:  # if the list is empty
                practSym_next.timesOn.append(core.getTime())  # manually store the press time
            button_press_time = practSym_next.timesOn[-1]
            # save the button press time and calculate the duration
            thisExp.addData('practSym_next.pressed', button_press_time)

            # calculate duration
            sequenceDataset_practSym.trialDuration[practiceSymBlock.thisN] = button_press_time - practSym_next_startTime
            thisExp.addData('myPractSym.trialDuration', sequenceDataset_practSym.trialDuration[practiceSymBlock.thisN])
  Routine practiceSymFeedback
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    CodeComponent practSymFB_code
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if sequenceDataset_practSym.Accuracy[practiceSymBlock.thisN] == 1:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent practSymFB_msg
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent practSymFB_sound
      forceEndRoutine = False
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine sequenceGeneration_practFinal3
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    CodeComponent code_16
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]
        red_number = np.arange(1, 17)  # red square choices from 1 to 16

        # shuffle the choices
        np.random.shuffle(red_number)

        # create variable 'trial'
        trial = np.arange(1, trialAll_num + 1)

        # select the choices from the shuffled numbers
        red_selection = red_number[:trialAll_num]

        # create figure name
        figName = []
        for num in red_selection:
            figName.append('red_square' + str(num))

        # create a DataFrame
        redSquare_Dataset_practFinal = pd.DataFrame({
            'trial': trial,
            'figName': figName,
            'redSquare_num': red_selection
        })

        redSquare_Dataset_practFinal
  Routine practiceFinalRedSquare
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    ImageComponent practFinal_square
      image [set every repeat] = $'red_square/'+sequenceDataset_practFinal.red_square_figName[practiceBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
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    CodeComponent practFinalSquare_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPractFinal.redSquare_figName',            sequenceDataset_practFinal.red_square_figName[practiceBlock.thisN])
        thisExp.addData('myPractFinal.redSquare_num',           sequenceDataset_practFinal.redSquare_num[practiceBlock.thisN])
  Routine practiceFinalRecall
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    TextComponent practFinalRecall_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = Please recall the locations of the red squares in the correct order
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    ButtonComponent button1_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button2_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05, 0.25)
      size = (0.1, 0.15)
      startVal [time (s)] = 0
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    ButtonComponent button3_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button4_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button5_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15, 0.1)
      size = (0.1, 0.15)
      startVal [time (s)] = 0
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    ButtonComponent button6_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button7_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button8_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button9_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button10_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button11_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button12_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button13_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button14_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button15_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button16_pract
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,-0.20)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent practFinalRecall_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.6)
      save = first click
      size = (0.3, 0.2)
      text = Next
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    CodeComponent practFinalRecall_code
      Code Type = Auto->JS
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      Begin Routine:
        practFinalRecall_next.setAutoDraw(False)

        # set a variable to keep track of the last clicked button
        last_clicked_button = None

        buttons = [button1_pract, button2_pract, button3_pract, button4_pract, button5_pract, button6_pract,
                   button7_pract, button8_pract, button9_pract, button10_pract, button11_pract, button12_pract,
                   button13_pract, button14_pract, button15_pract, button16_pract]

        # copy the red square to this line for future accuracy check
        thisExp.addData('myPractFinal.expectedRedSquare_num',           sequenceDataset_practFinal.redSquare_num[practiceRecallBlock.thisN])
      Each Frame:
        # deal with button color after click, and 'next' button
        for button in buttons:
            if button.isClicked:  # when a button is clicked
                if last_clicked_button is not None:  # if that button was already clicked before
                    last_clicked_button.fillColor = 'white'  # reset the previous clicked button to white
                button.fillColor = 'red'  # this current button now turn to red
                last_clicked_button = button  # store last clicked button
                practFinalRecall_next.setAutoDraw(True) # 'next' button pop up

                # set a variable to store the selected red square number and accuracy
                button_number = int(last_clicked_button.name.split('button')[1].split('_')[0])
                thisExp.addData('myPractFinal.selected_button', button_number)
                sequenceDataset_practFinal.Accuracy_red[practiceRecallBlock.thisN]             = int(sequenceDataset_practFinal.redSquare_num[practiceRecallBlock.thisN] == button_number)
                thisExp.addData('myPractFinal.Accuracy_red',      sequenceDataset_practFinal.Accuracy_red[practiceRecallBlock.thisN])
                break

        if practFinalRecall_next.isClicked:
            for last_clicked_button in buttons:
                last_clicked_button.fillColor = 'white' # reset them all to white after click 'next'
  Routine practiceFinalTrial
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    ImageComponent practFinalTrial_grid
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $'pract/'+sequenceDataset_practFinal.pract_figName[practiceBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Sym_timeLimit
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    ButtonComponent practFinalTrial_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      save = first click
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Sym_timeLimit
      text = Continue
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    CodeComponent practFinalTrial_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPractFinal.trial',            sequenceDataset_practFinal.trial[practiceBlock.thisN])
        thisExp.addData('myPractFinal.pract_figName',            sequenceDataset_practFinal.pract_figName[practiceBlock.thisN])
        thisExp.addData('myPractFinal.symmetry',           sequenceDataset_practFinal.symmetry[practiceBlock.thisN])
      End Routine:
        # speed error (pure error of taking too long to judge the grid)
        if not practFinalTrial_next.isClicked:
            sequenceDataset_practFinal.error_speed[practiceBlock.thisN] = 1
        else:
            sequenceDataset_practFinal.error_speed[practiceBlock.thisN] = 0
        thisExp.addData('myPractFinal.error_speed', sequenceDataset_practFinal.error_speed[practiceBlock.thisN])
  Routine practiceFinalResponse
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    TextComponent practFinalResponse_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Is this symmetrical?
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    ButtonComponent practFinalResponse_yes
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (-0.3, -0.2)
      save = first click
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = Yes
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    ButtonComponent practFinalResponse_no
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0.3, -0.2)
      save = first click
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = No
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    CodeComponent practFinalResponse_addData
      Code Type = Auto->JS
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      End Routine:
        # accuracy sym (overall accuracy, this will be 0 if participants take too long to respond)
        if sequenceDataset_practFinal.error_speed[practiceBlock.thisN] == 0:
            if sequenceDataset_practFinal.symmetry[practiceBlock.thisN] == 1:
                sequenceDataset_practFinal.Accuracy_sym[practiceBlock.thisN]             = practFinalResponse_yes.numClicks
            else:
                sequenceDataset_practFinal.Accuracy_sym[practiceBlock.thisN]             = practFinalResponse_no.numClicks
        else:
            sequenceDataset_practFinal.Accuracy_sym[practiceBlock.thisN] = 0
        thisExp.addData('myPractFinal.Accuracy_sym',         sequenceDataset_practFinal.Accuracy_sym[practiceBlock.thisN])

        # judgement error (pure error from judgement, don't care whether pt take too long to judge the grid)
        if sequenceDataset_practFinal.symmetry[practiceBlock.thisN] == 1:
            sequenceDataset_practFinal.error_sym[practiceBlock.thisN] = practFinalResponse_no.numClicks
        else:
            sequenceDataset_practFinal.error_sym[practiceBlock.thisN] = practFinalResponse_yes.numClicks
        thisExp.addData('myPractFinal.error_sym', sequenceDataset_practFinal.error_sym[practiceBlock.thisN])
  Routine practiceRedSquare
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    ImageComponent practSquare_stimuli
      image [set every repeat] = $'red_square/'+sequenceDataset_practRedSquare.figName[practiceRedSquareBlock.thisN]+'.JPG'
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
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    CodeComponent practSquare_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPractRedSquare.trial',            sequenceDataset_practRedSquare.trial[practiceRedSquareBlock.thisN])
        thisExp.addData('myPractRedSquare.redSquare_figName',            sequenceDataset_practRedSquare.figName[practiceRedSquareBlock.thisN])
        thisExp.addData('myPractRedSquare.redSquare_num',           sequenceDataset_practRedSquare.redSquare_num[practiceRedSquareBlock.thisN])
  Routine practiceRedSquareRecall
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    TextComponent practSquareRecall_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = Please recall the locations of the red squares in the correct order
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    ButtonComponent button1_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button2_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05, 0.25)
      size = (0.1, 0.15)
      startVal [time (s)] = 0
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    ButtonComponent button3_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button4_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15, 0.25)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button5_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15, 0.1)
      size = (0.1, 0.15)
      startVal [time (s)] = 0
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    ButtonComponent button6_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button7_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button8_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,0.1)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button9_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button10_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button11_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button12_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,-0.05)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button13_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.15,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button14_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.05,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button15_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.05,-0.2)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent button16_pract_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.15,-0.20)
      size = (0.1,0.15)
      startVal [time (s)] = 0
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    ButtonComponent practSquareRecall_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.6)
      save = first click
      size = (0.3, 0.2)
      text = Next
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    CodeComponent practSquareRecall_code
      Code Type = Auto->JS
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      Begin Routine:
        practSquareRecall_next.setAutoDraw(False)

        # set a variable to keep track of the last clicked button
        last_clicked_button = None

        buttons = [button1_pract_2, button2_pract_2, button3_pract_2, button4_pract_2, button5_pract_2, button6_pract_2,
                   button7_pract_2, button8_pract_2, button9_pract_2, button10_pract_2, button11_pract_2, button12_pract_2,
                   button13_pract_2, button14_pract_2, button15_pract_2, button16_pract_2]

        # copy the red square to this line for future accuracy check
        thisExp.addData('myPractRedSquare.expectedRedSquare_num',           sequenceDataset_practRedSquare.redSquare_num[practiceRedSquareRecallBlock.thisN])
      Each Frame:
        # deal with button color after click, and 'next' button
        for button in buttons:
            if button.isClicked:  # when a button is clicked
                if last_clicked_button is not None:  # if that button was already clicked before
                    last_clicked_button.fillColor = 'white'  # reset the previous clicked button to white
                button.fillColor = 'red'  # this current button now turn to red
                last_clicked_button = button  # store last clicked button
                practSquareRecall_next.setAutoDraw(True) # 'next' button pop up

                # set a variable to store the selected red square number and accuracy
                button_number = int(last_clicked_button.name.split('button')[1].split('_')[0])
                thisExp.addData('myPractRedSquare.selected_button', button_number)
                sequenceDataset_practRedSquare.Accuracy[practiceRedSquareRecallBlock.thisN]             = int(sequenceDataset_practRedSquare.redSquare_num[practiceRedSquareRecallBlock.thisN] == button_number)
                thisExp.addData('myPractRedSquare.Accuracy',      sequenceDataset_practRedSquare.Accuracy[practiceRedSquareRecallBlock.thisN])
                break

        if practSquareRecall_next.isClicked:
            for last_clicked_button in buttons:
                last_clicked_button.fillColor = 'white' # reset them all to white after click 'next'
  Routine practiceRedSquareFeedback
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    CodeComponent practSquareFB_code
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np

        # number of trials
        PracticeRS_allTrials_num = len(sequenceDataset_practRedSquare.Accuracy)

        # number of trials with correct answer
        PracticeRS_correctTrials_num = np.sum(sequenceDataset_practRedSquare.Accuracy)


        # message for feedback
        msg = "%i of %i correct recalls" %(PracticeRS_correctTrials_num, PracticeRS_allTrials_num)
    TextComponent practSquareFB_msg
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = deg
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      text [set every repeat]:
        $msg
  Routine practiceFinalFeedback
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    CodeComponent practFinalFB_code
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np

        # number of red square trials
        PracticeRed_allTrials_num = len(sequenceDataset_practFinal.Accuracy_red)
        # number of red square with correct answer
        PracticeRed_correctTrials_num = np.sum(sequenceDataset_practFinal.Accuracy_red)

        # number of sym trials
        PracticeFinalSym_allTrials_num = len(sequenceDataset_practFinal.Accuracy_sym)
        # number of correct sym trials
        PracticeFinalSym_correctTrials_num = np.sum(sequenceDataset_practFinal.Accuracy_sym)

        # total speed_error
        PracticeFinalSym_speedError_num = np.sum(sequenceDataset_practFinal.error_speed)
        #total sym_error
        PracticeFinalSym_accuracyError_num = np.sum(sequenceDataset_practFinal.error_sym)

        # message for feedback
        msg = "%i of %i correct judgments\n(%i delayed judgments)\n\n%i of %i correct recalls" %(PracticeFinalSym_correctTrials_num, PracticeFinalSym_allTrials_num, PracticeFinalSym_speedError_num, PracticeRed_correctTrials_num, PracticeRed_allTrials_num)
    TextComponent practFinalFB_msg
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    ButtonComponent practFinalFB_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Next
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  Routine instr_practiceRedSqure1
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    ImageComponent practSquare_image
      color = 1.0000, 1.0000, 1.0000
      image = pt_red1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent practSquare_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine instr_practiceRedSquare2
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    ImageComponent practSquare_image2
      image = pt_red2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent practSquare_next2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine start
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    ButtonComponent start_button
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      text = Start
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  Routine instr_practiceSym
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    ImageComponent instSym_image
      color = 1.0000, 1.0000, 1.0000
      image = pt_sym1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instSym_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine instr_practiceFinal1
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    ButtonComponent instFinal_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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    ImageComponent instFinal_image
      color = 1.0000, 1.0000, 1.0000
      image = final1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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  Routine inst_practiceFinal2
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    ImageComponent instFinal_image2
      color = 1.0000, 1.0000, 1.0000
      image = final2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent instFinal_next2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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  Routine inst_experiment1
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    ButtonComponent button_next_2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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    ImageComponent instExp_image
      image = task1.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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  Routine inst_experiment2
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    ButtonComponent instExp_next2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      oncePerClick = False
      pos = (0,-0.7)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Next
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    ImageComponent instExp_image2
      image = task2.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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  Routine practiceSymBlock_feedback
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    CodeComponent practSymFbBlock_code
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np

        # duration of practiceSymTrial
        avgPracticeSym_trialDuration = np.mean(sequenceDataset_practSym.trialDuration)
        stdPracticeSym_trialDuration = np.std(sequenceDataset_practSym.trialDuration)

        # time limit for sym trial
        Sym_timeLimit = avgPracticeSym_trialDuration + (2.5 * stdPracticeSym_trialDuration)

        # number of trials
        PracticeSym_allTrials_num = len(sequenceDataset_practSym.Accuracy)

        # number of trials with correct answer
        PracticeSym_correctTrials_num = np.sum(sequenceDataset_practSym.Accuracy)

        # percentage of trials with correct answer
        PracticeSym_correctTrials_pct= 100*PracticeSym_correctTrials_num/ PracticeSym_allTrials_num


        # message for feedback
        if PracticeSym_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \n average RT = %.2f s " %(PracticeSym_correctTrials_num, PracticeSym_allTrials_num, PracticeSym_correctTrials_pct, avgPracticeSym_trialDuration)
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(PracticeSym_correctTrials_num, PracticeSym_allTrials_num, PracticeSym_correctTrials_pct)


        # color of feedback
        if PracticeSym_correctTrials_pct>=85:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if PracticeSym_correctTrials_pct >= 85:
            practiceSymBlockCutOff.finished = True
    TextComponent practSymFbBlock_msg
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    ButtonComponent practSymFbBlock_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Next
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    TextComponent practSymFbBlock_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If your accuracy was less than 85% you will repeat the practice block.
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  Routine end
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    ImageComponent endImage
      color = 1.0000, 1.0000, 1.0000
      image = end slide.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent endButton
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.1
      pos = (0, -0.6)
      save = first click
      size = (0.3, 0.2)
      startVal [time (s)] = 0
      text = Submit
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  Routine practRedSquareSequenceGeneration
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    CodeComponent practSquare_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import numpy as np
        import pandas as pd

        # define and shuffle the set-size
        setSizes_pool = [2, 2, 3]
        random.shuffle(setSizes_pool)

        # count the total number of set-size
        setSizes_num = len(setSizes_pool)

        # create block number column
        setSizes_block_num = np.arange(1, setSizes_num + 1)

        # create a DataFrame from the shuffled pool
        setSizes_practRedSquare = pd.DataFrame({
            'setSizes_block_num': setSizes_block_num,
            'current_setSize': setSizes_pool

        })

        setSizes_practRedSquare
  Routine practRedSquareSequenceGeneration2
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    CodeComponent practSquare_sequenceGeneration2
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_practRedSquare.current_setSize[AllPracticeRedSquareBlocks.thisN]
        red_number = range(1, 17) # there are 16 choices for red square

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        # create variables 'figName and symmetry'
        redSquare_figName = np.empty(trialAll_num, dtype="<U12")
        redSquare_num = np.empty(trialAll_num, dtype=int)

        # create all possible figure and arrow names
        all_redSquare_names = [f"red_square{rn}" for rn in red_number]

        # shuffle all possible red square locations
        np.random.shuffle(all_redSquare_names)

        # select from the first-trialAll_num index
        selected_red_squares = all_redSquare_names[:trialAll_num]

        # assign selected names to 'redSquare_figName'
        redSquare_figName = np.array(selected_red_squares)

        # get the number of the location and add it in another coloumn
        redSquare_num = np.array([int(name.split('red_square')[-1]) for name in redSquare_figName])

        # create a DataFrame
        sequenceDataset_practRedSquare = pd.DataFrame({
            'trial': trial,
            'figName': redSquare_figName,
            'redSquare_num': redSquare_num,
            'Accuracy': np.nan
        })

        sequenceDataset_practRedSquare
  Routine practSymSequenceGeneration
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    CodeComponent practSym_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = 15  # number of trials (must be even)
        category = ["sym", "asym"]
        sym_number = range(1, 8)
        asym_number = range(1,9)

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        # create variables 'figName and symmetry'
        figName = np.empty(trialAll_num, dtype="<U10")
        symmetry = np.empty(trialAll_num, dtype=int)

        # create all possible figure and arrow names
        all_fig_names = [f"pract_{c}{n}" for c in category for n in (asym_number if c == 'asym' else sym_number)]

        np.random.shuffle(all_fig_names)
        # assign shuffled names to figName and determine symmetry
        figName = np.array(all_fig_names[:trialAll_num])
        symmetry = np.array([0 if "asym" in name else 1 for name in figName])

        # create a DataFrame
        sequenceDataset_practSym = pd.DataFrame({
            'trial': trial,
            'symmetry': symmetry,
            'figName': figName,
            'expectedResponse': np.nan,
            'observedResponse': np.nan,
            'Accuracy': np.nan,
            'trialDuration': np.nan
        })

        sequenceDataset_practSym
  Routine practFinalSequenceGeneration
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    CodeComponent practFinal_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import numpy as np
        import pandas as pd

        # define and shuffle the set-size
        setSizes_pool = [2,2,3]
        random.shuffle(setSizes_pool)

        # count the total number of set-size
        setSizes_num = len(setSizes_pool)

        # create block number column
        setSizes_block_num = np.arange(1, setSizes_num + 1)

        # create a DataFrame from the shuffled pool
        setSizes_practFinal = pd.DataFrame({
            'setSizes_block_num': setSizes_block_num,
            'current_setSize': setSizes_pool

        })

        setSizes_practFinal
  Routine practFinalSequenceGeneration2
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    CodeComponent practFinal_sequenceGeneration2
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('PractSetUp.setSizes_block_num',           setSizes_practFinal.setSizes_block_num[AllPracticeBlocks.thisN])
        thisExp.addData('PractSetUp.current_setSize',            setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN])
      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]  # number of trials (must be even)
        category = ["sym", "asym"]
        sym_number = range(1, 8)
        asym_number = range(1,9)
        red_number = range(1, 17) # there are 16 choices for red square

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        # create variables 'figName and symmetry'
        figName = np.empty(trialAll_num, dtype="<U11")
        symmetry = np.empty(trialAll_num, dtype=int)
        redSquare_figName = np.empty(trialAll_num, dtype="<U12")
        redSquare_num = np.empty(trialAll_num, dtype=int)

        # create all possible figure and arrow names
        all_fig_names = [f"pract_{c}{n}" for c in category for n in (asym_number if c == 'asym' else sym_number)]
        all_redSquare_names = [f"red_square{rn}" for rn in red_number]


        # create a while loop to run until conditions are met
        while True:
            # shuffle the possible figure and arrow names
            np.random.shuffle(all_fig_names)
            np.random.shuffle(all_redSquare_names)

            # used the first-trialAll_num index from each list
            used_fig_names = all_fig_names[:trialAll_num]
            used_redSquare_names = all_redSquare_names[:trialAll_num]

            for trialIdx in range(trialAll_num):
                figName[trialIdx] = used_fig_names[trialIdx]

                # add 1 or 0 in 'symmetry' based on "sym" or "asym" in the figure name
                symmetry[trialIdx] = 0 if "asym" in figName[trialIdx] else 1
                redSquare_figName[trialIdx] = used_redSquare_names[trialIdx]
                # extract the number from the red square name
                redSquare_num[trialIdx] = int(redSquare_figName[trialIdx].split('red_square')[-1])

            # create variables to calculate face forward/mirror reversed figure proportions
            sym_proportion = np.sum(symmetry == 1) / trialAll_num
            asym_proportion = np.sum(symmetry == 0) / trialAll_num

            # check if both proportions are at least 30%
            if sym_proportion >= 0.30 and asym_proportion >= 0.30:
                break  # exit the loop when the condition are met

        # create a DataFrame for the sequence dataset
        sequenceDataset_practFinal = pd.DataFrame({
            'trial': trial,
            'symmetry': symmetry,
            'pract_figName': figName,
            'red_square_figName': redSquare_figName,
            'redSquare_num': redSquare_num,
            'expectedResponse': np.nan,
            'observedResponse': np.nan,
            'Accuracy_sym': np.nan,
            'Accuracy_red': np.nan,
            'error_sym': np.nan,
            'error_speed': np.nan,
            'trialDuration': np.nan
        })

        sequenceDataset_practFinal
  Routine exp_sequenceGeneration
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    CodeComponent exp_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import numpy as np
        import pandas as pd

        # define and shuffle the set-size
        setSizes_pool = [2, 3, 4, 5]
        random.shuffle(setSizes_pool)

        # count the total number of set-size
        setSizes_num = len(setSizes_pool)

        # create block number column
        setSizes_block_num = np.arange(1, setSizes_num + 1)

        # create a DataFrame from the shuffled pool
        setSizes_data = pd.DataFrame({
            'setSizes_block_num': setSizes_block_num,
            'current_setSize': setSizes_pool

        })

        setSizes_data
  Routine expSequenceGeneration2
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    CodeComponent exp_sequenceGeneration2
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('ExpSetUp.setSizes_block_num',           setSizes_data.setSizes_block_num[AllExperimentalBlocks.thisN])
        thisExp.addData('ExpSetUp.current_setSize',            setSizes_data.current_setSize[AllExperimentalBlocks.thisN])
      End Routine:
        import numpy as np
        import pandas as pd

        trialAll_num = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
        category = ["sym", "asym"]
        sym_number = range(1, 25)  # there are 24 choices for each category
        red_number = range(1, 17) # there are 16 choices for red square

        # create variable 'trial'
        trial = 1 + np.arange(0, trialAll_num)

        # create variables 'figName and symmetry'
        figName = np.empty(trialAll_num, dtype="<U10")
        symmetry = np.empty(trialAll_num, dtype=int)
        redSquare_figName = np.empty(trialAll_num, dtype="<U12")
        redSquare_num = np.empty(trialAll_num, dtype=int)

        # create all possible figure and arrow names
        all_fig_names = [f"exp_{c}{sn}" for c in category for sn in sym_number]
        all_redSquare_names = [f"red_square{rn}" for rn in red_number]


        # create a while loop to run until conditions are met
        while True:
            # shuffle the possible figure and arrow names
            np.random.shuffle(all_fig_names)
            np.random.shuffle(all_redSquare_names)

            # used the first-trialAll_num index from each list
            used_fig_names = all_fig_names[:trialAll_num]
            used_redSquare_names = all_redSquare_names[:trialAll_num]

            for trialIdx in range(trialAll_num):
                figName[trialIdx] = used_fig_names[trialIdx]

                # add 1 or 0 in 'symmetry' based on "sym" or "asym" in the figure name
                symmetry[trialIdx] = 0 if "asym" in figName[trialIdx] else 1
                redSquare_figName[trialIdx] = used_redSquare_names[trialIdx]
                # extract the number from the red square name
                redSquare_num[trialIdx] = int(redSquare_figName[trialIdx].split('red_square')[-1])

            # create variables to calculate face forward/mirror reversed figure proportions
            sym_proportion = np.sum(symmetry == 1) / trialAll_num
            asym_proportion = np.sum(symmetry == 0) / trialAll_num

            # check if both proportions are at least 30%
            if sym_proportion >= 0.30 and asym_proportion >= 0.30:
                break  # exit the loop when the condition are met

        # create a DataFrame for the sequence dataset
        sequenceDataset = pd.DataFrame({
            'trial': trial,
            'symmetry': symmetry,
            'exp_figName': figName,
            'red_square_figName': redSquare_figName,
            'redSquare_num': redSquare_num,
            'expectedResponse': np.nan,
            'observedResponse': np.nan,
            'Accuracy_sym': np.nan,
            'Accuracy_red': np.nan,
            'error_sym': np.nan,
            'error_speed': np.nan,
            'trialDuration': np.nan

        })

        sequenceDataset
Flow
  Routine instr_practiceRedSqure1
  Routine instr_practiceRedSquare2
  Routine practRedSquareSequenceGeneration
  LoopInitiator AllPracticeRedSquareBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = len(setSizes_practRedSquare)
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    Routine start
    Routine practRedSquareSequenceGeneration2
    LoopInitiator practiceRedSquareBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practRedSquare.current_setSize[AllPracticeRedSquareBlocks.thisN]
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      Routine practiceRedSquare
    LoopTerminator practiceRedSquareBlock
    LoopInitiator practiceRedSquareRecallBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practRedSquare.current_setSize[AllPracticeRedSquareBlocks.thisN]
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      Routine practiceRedSquareRecall
    LoopTerminator practiceRedSquareRecallBlock
    Routine practiceRedSquareFeedback
  LoopTerminator AllPracticeRedSquareBlocks
  LoopInitiator practiceSymBlockCutOff loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine instr_practiceSym
    Routine start
    Routine practSymSequenceGeneration
    LoopInitiator practiceSymBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset_practSym)
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      Routine practiceSym
      Routine practiceSymResponse
      Routine practiceSymFeedback
    LoopTerminator practiceSymBlock
    Routine practiceSymBlock_feedback
  LoopTerminator practiceSymBlockCutOff
  Routine instr_practiceFinal1
  Routine inst_practiceFinal2
  Routine practFinalSequenceGeneration
  LoopInitiator AllPracticeBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = len(setSizes_practFinal)
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    Routine start
    Routine practFinalSequenceGeneration2
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]
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      Routine practiceFinalTrial
      Routine practiceFinalResponse
      Routine practiceFinalRedSquare
    LoopTerminator practiceBlock
    LoopInitiator practiceRecallBlock loopType="TrialHandler"
      loopType = sequential
      nReps = setSizes_practFinal.current_setSize[AllPracticeBlocks.thisN]
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      Routine practiceFinalRecall
    LoopTerminator practiceRecallBlock
    Routine practiceFinalFeedback
  LoopTerminator AllPracticeBlocks
  Routine inst_experiment1
  Routine inst_experiment2
  LoopInitiator ThreeBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine exp_sequenceGeneration
    LoopInitiator AllExperimentalBlocks loopType="TrialHandler"
      loopType = sequential
      nReps = len(setSizes_data)
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      Routine start
      Routine expSequenceGeneration2
      LoopInitiator experimentalBlock loopType="TrialHandler"
        loopType = sequential
        nReps = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
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        Routine experimentalTrial
        Routine experimentalResponse
        Routine experimentalRedSquare
      LoopTerminator experimentalBlock
      LoopInitiator experimentalRecallBlock loopType="TrialHandler"
        loopType = sequential
        nReps = setSizes_data.current_setSize[AllExperimentalBlocks.thisN]
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        Routine experimentalRecall
      LoopTerminator experimentalRecallBlock
    LoopTerminator AllExperimentalBlocks
  LoopTerminator ThreeBlocks
  Routine end
